CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample_ID>.*)_(?P<Channel_Name>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:Cy5_FoxP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:FITC_CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
RunStarDist:[module_num:5|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
    Select the input image:DAPI
    Model Type:2D
    Name the output object:Nuclei
    Tile input image?:No
    Horizontal tiles:1
    Vertical tiles:1
    Save probability image?:No
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    Model folder:Elsewhere...|
    Model:Versatile (fluorescent nuclei)
    Model:3D_demo
    Probability threshold:0.4
    Overlap threshold:0.4
    Manually set how much GPU memory each worker can use?:No
    GPU memory (in GB) for each worker:0.5

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:1
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

Threshold:[module_num:8|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
    Select the input image:FITC_CD3
    Name the output image:ThresholdCD3
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3
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
MaskObjects:[module_num:9|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
    Select objects to be masked:Cells
    Name the masked objects:CD3poscells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdCD3
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.3
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:FITC_CD3
    Name the output image:CD3StainOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:CD3poscells

Threshold:[module_num:11|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
    Select the input image:Cy5_FoxP3
    Name the output image:ThresholdFoxP3
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Median absolute deviation
    # of deviations:4
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
MaskObjects:[module_num:12|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
    Select objects to be masked:Cells
    Name the masked objects:FoxP3poscells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdFoxP3
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.2
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cy5_FoxP3
    Name the output image:FoxP3StainOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:FoxP3poscells

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:FITC_CD3
    Name the output image:CD3_FOXP3_doublepos
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:CD3poscells
    Select outline color:green
    Select objects to display:FoxP3poscells

RelateObjects:[module_num:15|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
    Parent objects:CD3poscells
    Child objects:FoxP3poscells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Doubleposcells
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
MeasureObjectIntensity:[module_num:16|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
    Select images to measure:Cy5_FoxP3, FITC_CD3
    Select objects to measure:Doubleposcells, CD3poscells, Cytoplasm, FoxP3poscells

MeasureColocalization:[module_num:17|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
    Select images to measure:Cy5_FoxP3, FITC_CD3
    Set threshold as percentage of maximum intensity for the images:10
    Select where to measure correlation:Within objects
    Select objects to measure:CD3poscells, Doubleposcells, FoxP3poscells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

GrayToColor:[module_num:18|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Cy5_FoxP3
    Select the image to be colored green:FITC_CD3
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    Name the output image:CD3_FoxP3_color
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:CD3StainOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:FITC_CD3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CD3_outlines
    Saved file format:png
    Output file location:Elsewhere...|D:\\C-S_Project\\Images_202401\\Images_output_CD3_FoxP3_20240315
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:FoxP3StainOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cy5_FoxP3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_FoxP3_outlines
    Saved file format:png
    Output file location:Elsewhere...|D:\\C-S_Project\\Images_202401\\Images_output_CD3_FoxP3_20240315
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:CD3_FOXP3_doublepos
    Select method for constructing file names:From image filename
    Select image name for file prefix:FITC_CD3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Doublepos_outlines
    Saved file format:png
    Output file location:Elsewhere...|D:\\C-S_Project\\Images_202401\\Images_output_CD3_FoxP3_20240315
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/Collaboration-Service/McAllister-Spasic/CD3-FOXP3-tumor_test1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
