CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '\x97', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample_ID>\d{4}\s\w)\s(?P<Magnification>\d{2}\w)\s(?P<Channel_Name>\S\w*)\s(?P<Sample_Suffix>\w).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '\x97', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:FITC_CD8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Txred")
    Name to assign these images:TxRed_SMA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '\x97', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:TxRed_SMA
    Name the output image:Illum_SMA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:TxRed_SMA
    Name the output image:Corr_SMA
    Select the illumination function:Illum_SMA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:9
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:150
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:CD8_Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:FITC_CD8
    Number of pixels by which to expand the primary objects:1
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:CD8_Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CD8_Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell_SMA
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Corr_SMA
    Number of pixels by which to expand the primary objects:50
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cell_SMA
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm_SMA
    Shrink smaller object prior to subtraction?:Yes

Threshold:[module_num:12|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
    Select the input image:FITC_CD8
    Name the output image:ThresholdCD8
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3
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
MaskObjects:[module_num:13|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
    Select objects to be masked:CD8_Cells
    Name the masked objects:CD8poscells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdCD8
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.2
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:FITC_CD8
    Name the output image:CD8StainOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:CD8poscells

EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Corr_SMA
    Name the output image:Enhanced_TxRed
    Select the operation:Enhance
    Feature size:120
    Feature type:Neurites
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    Smoothing scale:5
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:16|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
    Select the input image:Enhanced_TxRed
    Name the output image:ThresholdSMA
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.10,1.0
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    Lower outlier fraction:0.01
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Median absolute deviation
    # of deviations:1
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
MaskObjects:[module_num:17|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
    Select objects to be masked:Cell_SMA
    Name the masked objects:SMAposcells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdSMA
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.2
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TxRed_SMA
    Name the output image:SMAStainOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB0207
    Select objects to display:SMAposcells

MeasureImageAreaOccupied:[module_num:19|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
    Measure the area occupied by:Both
    Select binary images to measure:ThresholdSMA
    Select object sets to measure:SMAposcells

MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:SMAposcells
    Select neighboring objects to measure:CD8poscells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:SMAposcells
    Select neighboring objects to measure:CD8poscells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:50
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:22|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
    Select objects to measure:SMAposcells
    Select neighboring objects to measure:CD8poscells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:100
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:23|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
    Select objects to measure:SMAposcells
    Select neighboring objects to measure:CD8poscells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:24|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
    Select objects to measure:SMAposcells
    Select neighboring objects to measure:CD8poscells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ConvertObjectsToImage:[module_num:25|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
    Select the input objects:CD8poscells
    Name the output image:CD8posbinary
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:26|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:CD8posbinary
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:27|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
    Select the input image:ImageAfterMath
    Name the output image:DistanceTransform
    Rescale values from 0 to 1?:No

GrayToColor:[module_num:28|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:CD8_SMA_Merge
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    Hidden:3
    Image name:FITC_CD8
    Color:#16E931
    Weight:1.0
    Image name:TxRed_SMA
    Color:red
    Weight:1.0
    Image name:DAPI
    Color:#0000ff
    Weight:1.0

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CD8_SMA_Merge
    Name the output image:CD8_SMA_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:CD8poscells
    Select outline color:red
    Select objects to display:SMAposcells

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:SMAStainOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:TxRed_SMA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SMA_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|F:\\C-S_Project\\Images_202401\\Images_2023\\final image set CD8-SMA_202404\\SMA_stain_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:CD8StainOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:FITC_CD8
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CD8_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|F:\\C-S_Project\\Images_202401\\Images_2023\\final image set CD8-SMA_202404\\CD8_stain_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:CD8_SMA_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:FITC_CD8
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CD8_SMA_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|F:\\C-S_Project\\Images_202401\\Images_2023\\final image set CD8-SMA_202404\\CD8_SMA_merge_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|F:\\C-S_Project\\Images_202401\\Images_2023\\final image set CD8-SMA_202404
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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