CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does contain "blue")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "green")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "red")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:OrigGreen
    Name the primary objects to be identified:SMAStain
    Typical diameter of objects, in pixel units (Min,Max):1,9999
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:SMAOutlines
    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.09,1
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:OrigRed
    Name the primary objects to be identified:GranulinStain
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:GranOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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
MeasureImageAreaOccupied:[module_num:7|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:GranulinStain
    Retain a binary image of the object regions?:No
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
MeasureImageAreaOccupied:[module_num:8|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:SMAStain
    Retain a binary image of the object regions?:No
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGreen
    Name the output image:SMAStainOutlines
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:SMAOutlines
    Select outline color:White
    Load outlines from an image or objects?:Image
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigRed
    Name the output image:GranStainOutlines
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:GranOutlines
    Select outline color:White
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:SMAStainOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:GranStainOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRed
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
